PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = psychopy_example
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine stop
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Beim Ende:
        outlet.push_sample(['STOP'])
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Stimulation over

        Click to end
    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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  Routine start
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    ButtonComponent start_btn_p24
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      size = (0.3, 0.2)
      startVal [time (s)] = 0
      text = P24
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    ButtonComponent start_btn_i24
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0.3, -0.3)
      size = (0.3, 0.2)
      startVal [time (s)] = 0
      text = I24
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Choose your device
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet

        # Stream-Info definieren
        info = StreamInfo(
            name='ScienceMode-Control',
            type='Markers',
            channel_count=1,
            nominal_srate=0,          # irregular rate, da Marker unregelmäßig kommen
            channel_format='string',
            source_id='psychopy_marker_stream_001'
        )

        outlet = StreamOutlet(info)

        mouse = event.Mouse()
        mouse.clickReset()
        mouse_was_down = False  # Status: war die Taste im letzten Frame gedrückt?
      Begin Routine:
        p24_trials_repeat = 0
        i24_trials_repeat = 0
      Each Frame:
        buttons = mouse.getPressed()
        mouse_down_now = any(buttons)

        # Erst wenn die Maustaste tatsächlich losgelassen wurde, akzeptieren wir neue Klicks
        if mouse_down_now and not mouse_was_down:
            if mouse.isPressedIn(start_btn_p24):
                p24_trials_repeat = 1
                continueRoutine = False
            elif mouse.isPressedIn(start_btn_i24):
                i24_trials_repeat = 1
                continueRoutine = False

        mouse_was_down = mouse_down_now
      End Routine:
        # Beim Start des Experiments/Trials:
        outlet.push_sample(['START'])
  Routine p24
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    TextComponent fix
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        P24 Measurement ongoing
    ButtonComponent p24_btn_pattern_1
      bold = True
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (-0.4, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Pattern 1
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    ButtonComponent p24_btn_pattern_2
      bold = True
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0.0, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Pattern 2
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    ButtonComponent p24_btn_exit
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.4, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Exit
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        mouse = event.Mouse()
        mouse.clickReset()
        mouse_was_down = False  # Status: war die Taste im letzten Frame gedrückt?
      Begin Routine:
        from pylsl import StreamInlet, resolve_byprop
        import numpy as np
        from collections import deque


        # Sucht nach verfügbaren Streams (blockiert, bis mind. einer gefunden wird)
        print("Suche LSL-Stream...")
        streams = resolve_byprop('name', 'ScienceMode-Measurement-Data')  # oder 'name', 'DeinStreamName'
        inlet = StreamInlet(streams[0])
        print("Stream gefunden:", streams[0].name())



        buffer_size = 200
        data_buffer = deque([0]*buffer_size, maxlen=buffer_size)

        live_line = visual.ShapeStim(
            win,
            vertices=[[0,0]],
            closeShape=False,
            lineWidth=2,
            lineColor='white',      # oder z.B. 'red', 'yellow', [1,1,1] etc.
            units='height'
        )
      Each Frame:
        buttons = mouse.getPressed()
        mouse_down_now = any(buttons)

        # Erst wenn die Maustaste tatsächlich losgelassen wurde, akzeptieren wir neue Klicks
        if mouse_down_now and not mouse_was_down:
            if mouse.isPressedIn(p24_btn_pattern_1):
                data_buffer.clear()
                outlet.push_sample(['STIM_1'])
                # continueRoutine = False
            elif mouse.isPressedIn(p24_btn_pattern_2):
                data_buffer.clear()
                outlet.push_sample(['STIM_2'])
                # continueRoutine = False
            elif mouse.isPressedIn(p24_btn_exit):
                # outlet.push_sample(['STIM_2'])
                continueRoutine = False

        mouse_was_down = mouse_down_now



        chunk, timestamps = inlet.pull_chunk()
        buffer_size = len(chunk)
        if chunk:
            data_buffer.extend([s[0] for s in chunk])

            xs = np.linspace(-0.4, 0.4, buffer_size)

            raw = np.array(data_buffer)
            y_min, y_max = raw.min(), raw.max()

            if y_max > y_min:  # Division durch 0 vermeiden, falls Signal konstant ist
                # Normalisieren auf 0..1, dann auf gewünschten Anzeigebereich (-0.4..0.4) skalieren
                ys = (raw - y_min) / (y_max - y_min) * 0.5 - 0.25
            else:
                ys = np.zeros_like(raw)  # konstantes Signal → flache Linie bei 0

            live_line.vertices = list(zip(xs, ys))

        live_line.draw()
  Routine i24
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    TextComponent fix_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        I24 Measurement ongoing
    ButtonComponent i24_btn_exit
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.4, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Exit
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        mouse = event.Mouse()
        mouse.clickReset()
        mouse_was_down = False  # Status: war die Taste im letzten Frame gedrückt?
      Begin Routine:
        from pylsl import StreamInlet, resolve_byprop
        import numpy as np
        from collections import deque


        # Sucht nach verfügbaren Streams (blockiert, bis mind. einer gefunden wird)
        print("Suche LSL-Stream...")
        streams = resolve_byprop('name', 'ScienceMode-Measurement-Data')  # oder 'name', 'DeinStreamName'
        inlet = StreamInlet(streams[0])
        print("Stream gefunden:", streams[0].name())


        buffer_size = 2000
        data_buffer = deque([0]*buffer_size, maxlen=buffer_size)

        live_line = visual.ShapeStim(
            win,
            vertices=[[0,0]],
            closeShape=False,
            lineWidth=2,
            lineColor='white',      # oder z.B. 'red', 'yellow', [1,1,1] etc.
            units='height'
        )
      Each Frame:
        buttons = mouse.getPressed()
        mouse_down_now = any(buttons)

        # Erst wenn die Maustaste tatsächlich losgelassen wurde, akzeptieren wir neue Klicks
        if mouse_down_now and not mouse_was_down:
            if mouse.isPressedIn(i24_btn_exit):
                continueRoutine = False

        mouse_was_down = mouse_down_now



        chunk, timestamps = inlet.pull_chunk()
        if chunk:
            data_buffer.extend([s[0] for s in chunk])

            xs = np.linspace(-0.4, 0.4, buffer_size)

            raw = np.array(data_buffer)
            y_min, y_max = raw.min(), raw.max()

            if y_max > y_min:  # Division durch 0 vermeiden, falls Signal konstant ist
                # Normalisieren auf 0..1, dann auf gewünschten Anzeigebereich (-0.4..0.4) skalieren
                ys = (raw - y_min) / (y_max - y_min) * 0.5 - 0.25
            else:
                ys = np.zeros_like(raw)  # konstantes Signal → flache Linie bei 0

            live_line.vertices = list(zip(xs, ys))

        live_line.draw()
Flow
  Routine start
  LoopInitiator p24_trials loopType="TrialHandler"
    loopType = random
    nReps = p24_trials_repeat
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    Routine p24
  LoopTerminator p24_trials
  LoopInitiator i24_trials loopType="TrialHandler"
    loopType = random
    nReps = i24_trials_repeat
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    Routine i24
  LoopTerminator i24_trials
  Routine stop
